// title: A mathematical model of fatigue in skeletal muscle force contraction: fast-twitch muscle
// publisher: The University of Auckland, Auckland Bioengineering Institute
// comment: FN Catherine Lloyd; This cellML model is known to run in PCEnv (0.4), COR and JSim to to recreate the published results. The units have been checked and they are consistent in as much as they are known to be equivalent. This particular version of the CellML model represents fast twitch muscle.
// created: W3CDTF 2008-05-26T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; j.davidson@auckland.ac.nz; Given John; Family Davidson; Other B
// modification: W3CDTF 2008-06-16T09:25:49+12:00; Fixed the units such that the model now runs in JSIM without the programme having to carry out any unit modifications.; Given John; Family Davidson; Other B
// reference: Pubmed_id 18080210; Given Paul; Family Shorten; Other R; Given Paul; Family O'Callaghan; Given John; Family Davidson; Other B; Given Tanya; Family Soboleva; Other K; title A mathematical model of fatigue in skeletal muscle force contraction; volume 28; first_page 293; title Journal of Muscle Research and Cell Motility; W3CDTF 2007-00-00 00:00; last_page 313
// reference: subject_type keyword; excitation-contraction coupling
def model Fast_Twitch as
  // units definition
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit milliS_per_cm2 as
    unit siemens {pref: milli};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit microA_per_cm2 as
    unit ampere {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit ohm_cm2 as
    unit ohm;
    unit metre {expo: 2, pref: centi};
  enddef;
  def unit centi_metre as
    unit metre {pref: centi};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_millisecond_per_millivolt as
    unit second {expo: -1, pref: milli};
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit milliJ_per_degreeK_per_mol as
    unit joule {pref: milli};
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit degreeK as
    unit kelvin;
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  // <units name="milliM2">
  //   <unit prefix="micro" units="mole" exponent="2"/>
  //   <unit units="litre" exponent="-2" />
  // </units>
  def unit micro_mol_per_cm2_per_second as
    unit mole {pref: micro};
    unit metre {expo: -2, pref: centi};
    unit second {expo: -1};
  enddef;
  // Stern and Rios units
  def unit micrometre3_per_millisecond as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_micromolar2_per_millisecond as
    unit mole {expo: -2, pref: micro};
    unit litre {expo: 2};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_micromolar_per_millisecond as
    unit mole {expo: -1, pref: micro};
    unit litre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  // Razumova units
  def unit micromolar_per_millisecond_micrometre3 as
    unit mole {pref: micro};
    unit litre {expo: -1};
    unit second {expo: -1, pref: milli};
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit milliV_milliM as
    unit volt {pref: milli};
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM2 as
    unit mole {expo: 2, pref: milli};
    unit litre {expo: -2};
  enddef;
  def unit per_milliM3_per_millisecond as
    unit mole {expo: -3, pref: milli};
    unit litre {expo: 3};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_milliM2_per_millisecond as
    unit mole {expo: -2, pref: milli};
    unit litre {expo: 2};
    unit second {expo: -1, pref: milli};
  enddef;
  // components
  // /////////////////////////////////////////////////
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit micrometer as
    unit meter {pref: micro};
  enddef;
  def unit micrometer_per_millisecond as
    unit meter {pref: micro};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit joule_per_kelvin as
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  // //////////////////////////////////////////////////

  def comp cell as
    var time: millisecond {pub: out};
  enddef;
  def import using "stimulation_100Hz.cellml" for
    // def import using "stimulation_SingleTwitch.cellml" for
    // def import using "no_stim.cellml" for
    comp stim using comp stim;
  enddef;
  def map between wal_environment and stim for
    vars I_HH and I_HH;
  enddef;
  def map between cell and stim for
    vars time and time;
  enddef;

  def comp wal_environment as
    var C_m: microF_per_cm2 {init: 1.0};
    var gam: dimensionless {init: 4.8};
    var R_a: ohm_cm2 {init: 150};
    var tsi: centi_metre {init: 0.000001};
    var tsi2: centi_metre {init: 0.0025};
    var tsi3: centi_metre {init: 0.0005};
    var FF: C_per_mol {init: 96485, priv: out};
    var tau_K: millisecond {init: 350};
    var tau_Na: millisecond {init: 350};
    var f_T: dimensionless {init: 0.0032};
    var tau_K2: millisecond {init: 21875};
    var tau_Na2: millisecond {init: 21875};
    var I_K_rest: microA_per_cm2 {init: 1.02};
    var I_Na_rest: microA_per_cm2 {init: -1.29};
    var alpha_h_bar: per_millisecond {init: 0.0081, priv: out};
    var alpha_m_bar: per_millisecond_per_millivolt {init: 0.288, priv: out};
    var alpha_n_bar: per_millisecond_per_millivolt {init: 0.0131, priv: out};
    var beta_h_bar: per_millisecond {init: 4.38, priv: out};
    var beta_m_bar: per_millisecond {init: 1.38, priv: out};
    var beta_n_bar: per_millisecond {init: 0.067, priv: out};
    var V_m: millivolt {init: -46, priv: out};
    var V_n: millivolt {init: -40, priv: out};
    var V_h: millivolt {init: -45, priv: out};
    var V_a: millivolt {init: 70, priv: out};
    var V_S_inf: millivolt {init: -78, priv: out};
    var V_h_K_inf: millivolt {init: -40, priv: out};
    var A_a: millivolt {init: 150, priv: out};
    var A_S_inf: millivolt {init: 5.8, priv: out};
    var A_h_K_inf: millivolt {init: 7.5, priv: out};
    var K_alpha_h: millivolt {init: 14.7, priv: out};
    var K_beta_h: millivolt {init: 9, priv: out};
    var K_alpha_m: millivolt {init: 10, priv: out};
    var K_alpha_n: millivolt {init: 7, priv: out};
    var K_beta_m: millivolt {init: 18, priv: out};
    var K_beta_n: millivolt {init: 40, priv: out};
    var RR: milliJ_per_degreeK_per_mol {init: 8314.41, priv: out};
    var TT: degreeK {init: 293, priv: out};
    var g_Cl_bar: milliS_per_cm2 {init: 19.65, priv: out};
    var g_K_bar: milliS_per_cm2 {init: 64.8, priv: out};
    var g_Na_bar: milliS_per_cm2 {init: 804, priv: out};
    var G_K: milliS_per_cm2 {init: 11.1, priv: out};
    var del: dimensionless {init: 0.4, priv: out};
    var K_K: milliM2 {init: 950, priv: out};
    var K_S: milliM2 {init: 1, priv: out};
    var K_m_K: milliM {init: 1, priv: out};
    var K_m_Na: milliM {init: 13, priv: out};
    var S_i: milliM {init: 10, priv: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {init: 0.000621, priv: out};
    var V_tau: millivolt {init: 90, priv: out};
    var I_T: microA_per_cm2 {priv: out};
    var vS: millivolt {init: -79.974, priv: out, pub: out};
    var vT: millivolt {init: -80.2, priv: out, pub: out};
    var I_ionic_s: microA_per_cm2;
    var I_ionic_t: microA_per_cm2;
    var K_t: milliM {init: 5.9, priv: out};
    var K_i: milliM {init: 150.9, priv: out};
    var K_e: milliM {init: 5.9, priv: out};
    var Na_i: milliM {init: 12.7, priv: out};
    var Na_t: milliM {init: 133, priv: out};
    var Na_e: milliM {init: 133, priv: out};
    var E_K: millivolt {priv: out};
    var E_K_t: millivolt {priv: out};
    var Cl_i: milliM {priv: out};
    var Cl_o: milliM {priv: out};
    var Cl_i_t: milliM {priv: out};
    var Cl_o_t: milliM {priv: out};
    var J_K: milliV_milliM {priv: out};
    var J_K_t: milliV_milliM {priv: out};
    var eta_Cl: dimensionless {init: 0.1, priv: out};
    var eta_IR: dimensionless {init: 1.0, priv: out};
    var eta_DR: dimensionless {init: 0.45, priv: out};
    var eta_Na: dimensionless {init: 0.1, priv: out};
    var eta_NaK: dimensionless {init: 0.1, priv: out};
    var I_Cl: microA_per_cm2 {priv: in};
    var I_IR: microA_per_cm2 {priv: in};
    var I_DR: microA_per_cm2 {priv: in};
    var I_Na: microA_per_cm2 {priv: in};
    var I_NaK: microA_per_cm2 {priv: in};
    var I_Cl_t: microA_per_cm2 {priv: in};
    var I_IR_t: microA_per_cm2 {priv: in};
    var I_DR_t: microA_per_cm2 {priv: in};
    var I_Na_t: microA_per_cm2 {priv: in};
    var I_NaK_t: microA_per_cm2 {priv: in};
    var I_HH: dimensionless {init: 0, pub: in};
    // var I_HH: microA_per_cm2;
    var time: millisecond {priv: out, pub: in};
    // unit fix 5_08
    I_T = 1000{millivolt}/1{volt}*(vS-vT)/R_a;
    ode(vS, time) = -(I_ionic_s+I_T)/C_m;
    ode(vT, time) = -(I_ionic_t-I_T/gam)/C_m;
    I_ionic_s = I_Cl+I_IR+I_DR+I_Na+I_NaK+(-I_HH);
    I_ionic_t = I_Cl_t+I_IR_t+I_DR_t+I_Na_t+I_NaK_t;
    ode(K_i, time) = -f_T*(I_IR_t+I_DR_t+I_K_rest+(-2{dimensionless}*I_NaK_t))/(1000{milliM}/1{M}*FF*tsi)-(I_IR+I_DR+I_K_rest+(-2{dimensionless}*I_NaK))/(1000{milliM}/1{M}*FF*tsi2);
    ode(K_t, time) = (I_IR_t+I_DR_t+I_K_rest+(-2{dimensionless}*I_NaK_t))/(1000{milliM}/1{M}*FF*tsi)-(K_t-K_e)/tau_K;
    ode(K_e, time) = (I_IR+I_DR+I_K_rest+(-2{dimensionless}*I_NaK))/(1000{milliM}/1{M}*FF*tsi3)+(K_t-K_e)/tau_K2;
    ode(Na_i, time) = -f_T*(I_Na_t+I_Na_rest+3{dimensionless}*I_NaK_t)/(1000{milliM}/1{M}*FF*tsi)-(I_Na+I_Na_rest+3{dimensionless}*I_NaK)/(1000{milliM}/1{M}*FF*tsi2);
    ode(Na_t, time) = (I_Na_t+I_Na_rest+3{dimensionless}*I_NaK_t)/(1000{milliM}/1{M}*FF*tsi)-(Na_t-Na_e)/tau_Na;
    ode(Na_e, time) = (I_Na+I_Na_rest+3{dimensionless}*I_NaK)/(1000{milliM}/1{M}*FF*tsi3)+(Na_t-Na_e)/tau_Na2;
    E_K = RR*TT/FF*ln(K_e/K_i);
    E_K_t = RR*TT/FF*ln(K_t/K_i);
    Cl_i = 156.5{milliM}/(5{dimensionless}+exp(-FF*E_K/(RR*TT)));
    Cl_o = 156.5{milliM}-5{dimensionless}*Cl_i;
    Cl_i_t = 156.5{milliM}/(5{dimensionless}+exp(-FF*E_K_t/(RR*TT)));
    Cl_o_t = 156.5{milliM}-5{dimensionless}*Cl_i_t;
    J_K = vS*(K_i-K_e*exp(-1{dimensionless}*FF*vS/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vS/(RR*TT)));
    J_K_t = vT*(K_i-K_t*exp(-1{dimensionless}*FF*vT/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vT/(RR*TT)));
    // TODO
    // I_HH = sel
    //     case time > 10{dimensionless} and time < 10.5{dimensionless}:
    //         150{dimensionless};
    //     otherwise:
    //         0{dimensionless};
    // endsel;
  enddef;

  def comp sarco_Cl_channel as
    var a: dimensionless;
    var vS: millivolt {pub: in};
    var V_a: millivolt {pub: in};
    var A_a: millivolt {pub: in};
    var J_Cl: milliV_milliM;
    var Cl_i: milliM {pub: in};
    var Cl_o: milliM {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_Cl_bar: milliS_per_cm2 {pub: in};
    var g_Cl: milliS_per_cm2;
    var I_Cl: microA_per_cm2 {pub: out};
    var time: millisecond {pub: in};
    a = 1{dimensionless}/(1{dimensionless}+exp((vS-V_a)/A_a));
    J_Cl = vS*(Cl_i-Cl_o*exp(FF*vS/(RR*TT)))/(1{dimensionless}-exp(FF*vS/(RR*TT)));
    g_Cl = g_Cl_bar*pow(a, 4{dimensionless});
    I_Cl = g_Cl*J_Cl/45{milliM};
  enddef;

  def comp sarco_IR_channel as
    var K_R: milliM;
    var K_e: milliM {pub: in};
    var del: dimensionless {pub: in};
    var E_K: millivolt {pub: in};
    var vS: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_IR_bar: milliS_per_cm2;
    var G_K: milliS_per_cm2 {pub: in};
    var K_K: milliM2 {pub: in};
    var y: dimensionless;
    var K_S: milliM2 {pub: in};
    var S_i: milliM {pub: in};
    var g_IR: milliS_per_cm2;
    var I_IR: microA_per_cm2 {pub: out};
    var J_K: milliV_milliM {pub: in};
    var time: millisecond {priv: out, pub: in};
    K_R = K_e*exp(-del*E_K*FF/(RR*TT));
    g_IR_bar = G_K*sqr(K_R)/(K_K+sqr(K_R));
    y = 1{dimensionless}-pow(1{dimensionless}+K_S*(1{dimensionless}+sqr(K_R)/K_K)/(sqr(S_i)*exp(2{dimensionless}*(1{dimensionless}-del)*vS*FF/(RR*TT))), -1{dimensionless});
    g_IR = g_IR_bar*y;
    I_IR = sel
      case J_K > 0{dimensionless}:
        g_IR*J_K/50{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp sarco_DR_channel as
    var alpha_n: per_millisecond;
    var alpha_n_bar: per_millisecond_per_millivolt {pub: in};
    var V_n: millivolt {pub: in};
    var K_alpha_n: millivolt {pub: in};
    var beta_n: per_millisecond;
    var beta_n_bar: per_millisecond {pub: in};
    var K_beta_n: millivolt {pub: in};
    var h_K_inf: dimensionless;
    var V_h_K_inf: millivolt {pub: in};
    var A_h_K_inf: millivolt {pub: in};
    var tau_h_K: millisecond;
    var n: dimensionless {init: 0.009466};
    var h_K: dimensionless {init: 0.9952};
    var g_DR: milliS_per_cm2;
    var g_K_bar: milliS_per_cm2 {pub: in};
    var I_DR: microA_per_cm2 {pub: out};
    var J_K: milliV_milliM {pub: in};
    var time: millisecond {pub: in};
    var vS: millivolt {pub: in};
    alpha_n = alpha_n_bar*(vS-V_n)/(1{dimensionless}-exp(-(vS-V_n)/K_alpha_n));
    beta_n = beta_n_bar*exp(-(vS-V_n)/K_beta_n);
    h_K_inf = 1{dimensionless}/(1{dimensionless}+exp((vS-V_h_K_inf)/A_h_K_inf));
    tau_h_K = 1000{millisecond}*exp(-(vS+40{millivolt})/25.75{millivolt});
    ode(n, time) = alpha_n*(1{dimensionless}-n)-beta_n*n;
    ode(h_K, time) = (h_K_inf-h_K)/tau_h_K;
    g_DR = g_K_bar*pow(n, 4{dimensionless})*h_K;
    I_DR = g_DR*J_K/50{milliM};
  enddef;

  def comp sarco_Na_channel as
    var vS: millivolt {pub: in};
    var Na_i: milliM {pub: in};
    var Na_e: milliM {pub: in};
    var alpha_h: per_millisecond;
    var alpha_h_bar: per_millisecond {pub: in};
    var V_h: millivolt {pub: in};
    var K_alpha_h: millivolt {pub: in};
    var beta_h: per_millisecond;
    var beta_h_bar: per_millisecond {pub: in};
    var K_beta_h: millivolt {pub: in};
    var alpha_m: per_millisecond;
    var alpha_m_bar: per_millisecond_per_millivolt {pub: in};
    var V_m: millivolt {pub: in};
    var K_alpha_m: millivolt {pub: in};
    var beta_m: per_millisecond;
    var beta_m_bar: per_millisecond {pub: in};
    var K_beta_m: millivolt {pub: in};
    var S_inf: dimensionless;
    var V_S_inf: millivolt {pub: in};
    var A_S_inf: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var tau_S: millisecond;
    var V_tau: millivolt {pub: in};
    var m: dimensionless {init: 0.0358};
    var h: dimensionless {init: 0.4981};
    var S: dimensionless {init: 0.581};
    var g_Na: milliS_per_cm2;
    var g_Na_bar: milliS_per_cm2 {pub: in};
    var J_Na: milliV_milliM;
    var I_Na: microA_per_cm2 {pub: out};
    var time: millisecond {pub: in};
    alpha_h = alpha_h_bar*exp(-(vS-V_h)/K_alpha_h);
    beta_h = beta_h_bar/(1{dimensionless}+exp(-(vS-V_h)/K_beta_h));
    alpha_m = alpha_m_bar*(vS-V_m)/(1{dimensionless}-exp(-(vS-V_m)/K_alpha_m));
    beta_m = beta_m_bar*exp(-(vS-V_m)/K_beta_m);
    S_inf = 1{dimensionless}/(1{dimensionless}+exp((vS-V_S_inf)/A_S_inf));
    // factor of 1000 added on 25/6/07
    tau_S = 8571{millisecond}/(0.2{dimensionless}+5.65{dimensionless}*sqr((vS+V_tau)/100{millivolt}));
    J_Na = vS*(Na_i-Na_e*exp(-1{dimensionless}*FF*vS/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vS/(RR*TT)));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
    ode(S, time) = (S_inf-S)/tau_S;
    g_Na = g_Na_bar*pow(m, 3{dimensionless})*h*S;
    I_Na = g_Na*J_Na/75{milliM};
  enddef;

  def comp sarco_NaK_channel as
    var sig: dimensionless;
    var f1: dimensionless;
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var I_NaK_bar: microA_per_cm2;
    var K_m_K: milliM {pub: in};
    var K_m_Na: milliM {pub: in};
    var I_NaK: microA_per_cm2 {pub: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {pub: in};
    var K_e: milliM {pub: in};
    var Na_i: milliM {pub: in};
    var Na_e: milliM {pub: in};
    var time: millisecond {pub: in};
    var vS: millivolt {pub: in};
    sig = 1{dimensionless}/7{dimensionless}*(exp(Na_e/67.3{milliM})-1{dimensionless});
    f1 = pow(1{dimensionless}+0.12{dimensionless}*exp(-0.1{dimensionless}*vS*FF/(RR*TT))+0.04{dimensionless}*sig*exp(-vS*FF/(RR*TT)), -1{dimensionless});
    I_NaK_bar = FF*J_NaK_bar/(sqr(1{dimensionless}+K_m_K/K_e)*pow(1{dimensionless}+K_m_Na/Na_i, 3{dimensionless}));
    I_NaK = I_NaK_bar*f1;
  enddef;

  def comp t_Cl_channel as
    var a_t: dimensionless;
    var vT: millivolt {pub: in};
    var V_a: millivolt {pub: in};
    var A_a: millivolt {pub: in};
    var J_Cl_t: milliV_milliM;
    var Cl_i_t: milliM {pub: in};
    var Cl_o_t: milliM {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_Cl_bar: milliS_per_cm2 {pub: in};
    var I_Cl_t: microA_per_cm2 {pub: out};
    var g_Cl_t: milliS_per_cm2;
    var eta_Cl: dimensionless {pub: in};
    var time: millisecond {priv: out, pub: in};
    a_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_a)/A_a));
    J_Cl_t = vT*(Cl_i_t-Cl_o_t*exp(FF*vT/(RR*TT)))/(1{dimensionless}-exp(FF*vT/(RR*TT)));
    g_Cl_t = g_Cl_bar*pow(a_t, 4{dimensionless});
    I_Cl_t = eta_Cl*g_Cl_t*J_Cl_t/45{milliM};
  enddef;

  def comp t_IR_channel as
    var K_R_t: milliM;
    var K_t: milliM {pub: in};
    var del: dimensionless {pub: in};
    var E_K_t: millivolt {pub: in};
    var vT: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var g_IR_bar_t: milliS_per_cm2;
    var G_K: milliS_per_cm2 {pub: in};
    var K_K: milliM2 {pub: in};
    var y_t: dimensionless;
    var K_S: milliM2 {pub: in};
    var S_i: milliM {pub: in};
    var g_IR_t: milliS_per_cm2;
    var I_IR_t: microA_per_cm2 {pub: out};
    var J_K_t: milliV_milliM {pub: in};
    var eta_IR: dimensionless {pub: in};
    var time: millisecond {priv: out, pub: in};
    K_R_t = K_t*exp(-del*E_K_t*FF/(RR*TT));
    g_IR_bar_t = G_K*sqr(K_R_t)/(K_K+sqr(K_R_t));
    y_t = 1{dimensionless}-pow(1{dimensionless}+K_S*(1{dimensionless}+sqr(K_R_t)/K_K)/(sqr(S_i)*exp(2{dimensionless}*(1{dimensionless}-del)*vT*FF/(RR*TT))), -1{dimensionless});
    g_IR_t = g_IR_bar_t*y_t;
    // <ci> H </ci>
    I_IR_t = eta_IR*g_IR_t*J_K_t/50{milliM};
  enddef;

  def comp t_DR_channel as
    var alpha_n_t: per_millisecond;
    var alpha_n_bar: per_millisecond_per_millivolt {pub: in};
    var V_n: millivolt {pub: in};
    var K_alpha_n: millivolt {pub: in};
    var beta_n_t: per_millisecond;
    var beta_n_bar: per_millisecond {pub: in};
    var K_beta_n: millivolt {pub: in};
    var h_K_inf_t: dimensionless;
    var V_h_K_inf: millivolt {pub: in};
    var A_h_K_inf: millivolt {pub: in};
    var tau_h_K_t: millisecond;
    var n_t: dimensionless {init: 0.009466};
    var h_K_t: dimensionless {init: 0.9952};
    var g_DR_t: milliS_per_cm2;
    var g_K_bar: milliS_per_cm2 {pub: in};
    var I_DR_t: microA_per_cm2 {pub: out};
    var J_K_t: milliV_milliM {pub: in};
    var eta_DR: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var vT: millivolt {pub: in};
    alpha_n_t = alpha_n_bar*(vT-V_n)/(1{dimensionless}-exp(-(vT-V_n)/K_alpha_n));
    beta_n_t = beta_n_bar*exp(-(vT-V_n)/K_beta_n);
    h_K_inf_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_h_K_inf)/A_h_K_inf));
    tau_h_K_t = 1{millisecond}*exp(-(vT+40{millivolt})/25.75{millivolt});
    ode(n_t, time) = alpha_n_t*(1{dimensionless}-n_t)-beta_n_t*n_t;
    ode(h_K_t, time) = (h_K_inf_t-h_K_t)/tau_h_K_t;
    g_DR_t = g_K_bar*pow(n_t, 4{dimensionless})*h_K_t;
    I_DR_t = eta_DR*g_DR_t*J_K_t/50{milliM};
  enddef;

  def comp t_Na_channel as
    var vT: millivolt {pub: in};
    var Na_i: milliM {pub: in};
    var Na_t: milliM {pub: in};
    var alpha_h_t: per_millisecond;
    var alpha_h_bar: per_millisecond {pub: in};
    var V_h: millivolt {pub: in};
    var K_alpha_h: millivolt {pub: in};
    var beta_h_t: per_millisecond;
    var beta_h_bar: per_millisecond {pub: in};
    var K_beta_h: millivolt {pub: in};
    var alpha_m_t: per_millisecond;
    var alpha_m_bar: per_millisecond_per_millivolt {pub: in};
    var V_m: millivolt {pub: in};
    var K_alpha_m: millivolt {pub: in};
    var beta_m_t: per_millisecond;
    var beta_m_bar: per_millisecond {pub: in};
    var K_beta_m: millivolt {pub: in};
    var S_inf_t: dimensionless;
    var V_S_inf: millivolt {pub: in};
    var A_S_inf: millivolt {pub: in};
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var tau_S_t: millisecond;
    var V_tau: millivolt {pub: in};
    var m_t: dimensionless {init: 0.0358};
    var h_t: dimensionless {init: 0.4981};
    var S_t: dimensionless {init: 0.581};
    var g_Na_t: milliS_per_cm2;
    var g_Na_bar: milliS_per_cm2 {pub: in};
    var J_Na_t: milliV_milliM;
    var I_Na_t: microA_per_cm2 {pub: out};
    var eta_Na: dimensionless {pub: in};
    var time: millisecond {pub: in};
    alpha_h_t = alpha_h_bar*exp(-(vT-V_h)/K_alpha_h);
    beta_h_t = beta_h_bar/(1{dimensionless}+exp(-(vT-V_h)/K_beta_h));
    alpha_m_t = alpha_m_bar*(vT-V_m)/(1{dimensionless}-exp(-(vT-V_m)/K_alpha_m));
    beta_m_t = beta_m_bar*exp(-(vT-V_m)/K_beta_m);
    S_inf_t = 1{dimensionless}/(1{dimensionless}+exp((vT-V_S_inf)/A_S_inf));
    // factor of 1000 added on 25/6/07
    tau_S_t = 8571{millisecond}/(0.2{dimensionless}+5.65{dimensionless}*sqr((vT+V_tau)/100{millivolt}));
    J_Na_t = vT*(Na_i-Na_t*exp(-1{dimensionless}*FF*vT/(RR*TT)))/(1{dimensionless}-exp(-1{dimensionless}*FF*vT/(RR*TT)));
    ode(m_t, time) = alpha_m_t*(1{dimensionless}-m_t)-beta_m_t*m_t;
    ode(h_t, time) = alpha_h_t*(1{dimensionless}-h_t)-beta_h_t*h_t;
    ode(S_t, time) = (S_inf_t-S_t)/tau_S_t;
    g_Na_t = g_Na_bar*pow(m_t, 3{dimensionless})*h_t*S_t;
    // pow(g_Na_bar, 3{dimensionless})*h_t*S_t;
    I_Na_t = eta_Na*g_Na_t*J_Na_t/75{milliM};
  enddef;

  def comp t_NaK_channel as
    var sig_t: dimensionless;
    var f1_t: dimensionless;
    var FF: C_per_mol {pub: in};
    var RR: milliJ_per_degreeK_per_mol {pub: in};
    var TT: degreeK {pub: in};
    var I_NaK_bar_t: microA_per_cm2;
    var K_m_K: milliM {pub: in};
    var K_m_Na: milliM {pub: in};
    var I_NaK_t: microA_per_cm2 {pub: out};
    var J_NaK_bar: micro_mol_per_cm2_per_second {pub: in};
    var K_t: milliM {pub: in};
    var Na_i: milliM {pub: in};
    var Na_t: milliM {pub: in};
    var eta_NaK: dimensionless {pub: in};
    var time: millisecond {pub: in};
    var vT: millivolt {pub: in};
    sig_t = 1{dimensionless}/7{dimensionless}*(exp(Na_t/67.3{milliM})-1{dimensionless});
    f1_t = pow(1{dimensionless}+0.12{dimensionless}*exp(-0.1{dimensionless}*vT*FF/(RR*TT))+0.04{dimensionless}*sig_t*exp(-vT*FF/(RR*TT)), -1{dimensionless});
    I_NaK_bar_t = FF*J_NaK_bar/(sqr(1{dimensionless}+K_m_K/K_t)*pow(1{dimensionless}+K_m_Na/Na_i, 3{dimensionless}));
    I_NaK_t = eta_NaK*I_NaK_bar_t*f1_t;
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millisecond_per_micromolar as
    unit second {expo: -1, pref: milli};
    unit mole {expo: -1, pref: micro};
    unit liter {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit liter {expo: -1};
  enddef;
  def unit micromolar_per_millisecond as
    unit mole {pref: micro};
    unit liter {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit microM2 as
    unit mole {expo: 2, pref: micro};
    unit litre {expo: -2};
  enddef;

  def comp calcium_dynamics as
    var time: millisecond {pub: in};
    var vT: millivolt {init: 0, pub: in};
    var Ca_tot: micromolar {init: 2980};
    var Ca_MP: micromolar {init: 0.1};
    var Ca_MP_rest: micromolar {init: 0.1};
    var CaDye: micromolar {init: 0.9666};
    var CaTrop: micromolar {init: 0.7309, pub: out};
    var CaATP: micromolar {init: 0.388};
    var CaParv: micromolar {init: 24.1759};
    var Ca_SR: micromolar;
    // {init: 310.0000};
    var CaCSQ: micromolar {init: 2644};
    var CSQ_free: micromolar;
    var CSQ_tot: micromolar {init: 3350};
    var Mg_MP: micromolar;
    var Mg_tot: micromolar {init: 1.04e+04};
    var MgTrop: micromolar {init: 230.4436};
    var MgATP: micromolar {init: 7.7668e+03};
    var MgParv: micromolar {init: 1.4161e+03};
    var Trop_free: micromolar;
    var Trop_tot: micromolar {init: 240};
    var Parv_free: micromolar;
    var Parv_tot: micromolar {init: 1500};
    var ATP_free: micromolar;
    var ATP_tot: micromolar {init: 8000};
    var Dye_free: micromolar;
    var Dye_tot: micromolar {init: 10};
    // Calcium Pumps Parameters
    var J_SERCA: micromolar_per_millisecond;
    var J_SERCA_resting: micromolar_per_millisecond {init: 12e-3};
    var J_RyR: micromolar_per_millisecond;
    var V_max: micromolar_per_millisecond;
    var K_m: micromolar {init: 0.34};
    var N: dimensionless {init: 4.7};
    var RyR_leak: micromolar_per_millisecond {init: 0.012};
    var CaMax: micromolar {init: 30.5};
    // 58.6109};
    var k_RyR: dimensionless {init: 0.068};
    var vT_50: millivolt {init: -37.5};
    // -30};
    // -30};
    var sigma: dimensionless {init: 0.7553};
    var T: millisecond {init: 10};
    var k_CaDye: per_millisecond_per_micromolar {init: 0.214};
    var k_CaDye_prime: per_millisecond {init: 0.2};
    var k_CaTrop: per_millisecond_per_micromolar {init: 0.1340};
    var k_CaTrop_prime: per_millisecond {init: 0.1618};
    var k_CaATP: per_millisecond_per_micromolar {init: 1.4142};
    var k_CaATP_prime: per_millisecond {init: 84.8528};
    var k_CaParv: per_millisecond_per_micromolar {init: 0.0085};
    var k_CaParv_prime: per_millisecond {init: 0.0021};
    var k_MgTrop: per_millisecond_per_micromolar {init: 0.0517};
    var k_MgTrop_prime: per_millisecond {init: 1.9800};
    var k_MgATP: per_millisecond_per_micromolar {init: 0.0184};
    var k_MgATP_prime: per_millisecond {init: 0.5515};
    var k_MgParv: per_millisecond_per_micromolar {init: 1.6122e-04};
    var k_MgParv_prime: per_millisecond {init: 0.0068};
    var k_CaCSQ: per_millisecond_per_micromolar {init: 0.1556};
    var k_CaCSQ_prime: per_millisecond {init: 12.8693};
    var scaling: dimensionless {init: 0.88};
    var P_MP: micromolar {init: 0};
    var P_SR: micromolar {init: 0};
    var CaP_SR: micromolar {init: 0};
    var k_CaP: per_millisecond_per_micromolar {init: 1};
    var k_CaP_prime: per_millisecond {init: 0.1};
    var k_P: per_millisecond {init: 0.00362};
    var b_P: per_millisecond {init: 0.02867};
    var J_Pi_XB: micromolar_per_millisecond {init: 0, pub: in};
    var J_Pi_SERCA: micromolar_per_millisecond;
    var V_SR2: dimensionless {init: 0.0428};
    var CaP_prod: micromolar_per_millisecond;
    var CaP_breakdown: micromolar_per_millisecond;
    var CaP_sol_krit: microM2 {init: 6e6};
    var A_p: dimensionless {init: 1};
    var B_p: dimensionless {init: 0.0001};
    // //////////////////// Myoplasma //////////////////////////////////////////////////////////
    ode(Ca_MP, time) = J_RyR-J_SERCA-(k_CaTrop*Trop_free+k_CaATP*ATP_free+k_CaParv*Parv_free+k_CaDye*Dye_free)*Ca_MP+k_CaTrop_prime*CaTrop+k_CaATP_prime*CaATP+k_CaParv_prime*CaParv+k_CaDye_prime*CaDye;
    // Ca_MP = Ca_tot-Ca_SR-CaCSQ-CaTrop-CaATP-CaParv-CaDye;
    ode(CaTrop, time) = k_CaTrop*Trop_free*Ca_MP-k_CaTrop_prime*CaTrop;
    ode(CaATP, time) = k_CaATP*ATP_free*Ca_MP-k_CaATP_prime*CaATP;
    ode(CaParv, time) = k_CaParv*Parv_free*Ca_MP-k_CaParv_prime*CaParv;
    ode(CaDye, time) = k_CaDye*Dye_free*Ca_MP-k_CaDye_prime*CaDye;
    // ode(Mg_MP,time) = - (k_MgTrop*Trop_free+k_MgATP*ATP_free+k_MgParv*Parv_free)*Mg_MP + (k_MgTrop_prime*MgTrop+k_MgATP_prime*MgATP+k_MgParv_prime*MgParv);;
    ode(MgTrop, time) = k_MgTrop*Trop_free*Mg_MP-k_MgTrop_prime*MgTrop;
    ode(MgATP, time) = k_MgATP*ATP_free*Mg_MP-k_MgATP_prime*MgATP;
    ode(MgParv, time) = k_MgParv*Parv_free*Mg_MP-k_MgParv_prime*MgParv;
    Trop_free = Trop_tot-CaTrop-MgTrop;
    ATP_free = ATP_tot-CaATP-MgATP;
    Parv_free = Parv_tot-CaParv-MgParv;
    Dye_free = Dye_tot-CaDye;
    // ////////////////// Calcium Transport //////////////////////////////////////////////////////
    J_SERCA = V_max*pow(Ca_MP, N)/(pow(Ca_MP, N)+pow(K_m, N));
    V_max = J_SERCA_resting*(pow(Ca_MP_rest, N)+pow(K_m, N))/pow(Ca_MP_rest, N);
    // J_RyR = RyR_leak+CaMax/(sigma*sqrt(2{dimensionless}*pi))*exp(-sqr(time-T)/(2{dimensionless}*sqr(sigma)));
    J_RyR = RyR_leak+1{dimensionless}/(1{dimensionles}+exp(-k_RyR*(vT-vT_50)))*CaMax/340{micromolar}*(Ca_SR-Ca_MP);
    // J_RyR = RyR_leak+1{dimensionless}/(1{dimensionles}+exp(-k_RyR*(vT-vT_50)))*CaMax;
    // ////////////////// Sarcoplamic Reticulum //////////////////////////////////////////////////
    ode(CaCSQ, time) = k_CaCSQ*Ca_SR*CSQ_free-k_CaCSQ_prime*CaCSQ;
    CSQ_free = CSQ_tot-CaCSQ;
    // ////////////////// Pi Reactions ///////////////////////////////////////////////////////////
    J_Pi_SERCA = 0.5{dimensionless}*J_SERCA;
    // ode(P_SR, time) k_P*(P_MP-P_SR)-k_CaP*Ca_SR*P_SR+k_CaP_prime*CaP_SR; //= 0{dimensionless};
    // ode(CaP_SR, time) = k_CaP*Ca_SR*P_SR-k_CaP_prime*CaP_SR;
    // These equations are addapted from Shortens model
    ode(P_MP, time) = 0.5{dimensionless}*4{dimensionless}*Trop_tot*J_Pi_XB+J_Pi_SERCA-b_P*P_MP-k_P*(P_MP-P_SR)/V_SR2;
    ode(P_SR, time) = k_P*(P_MP-P_SR)/V_SR2-1{dimensionless}*(CaP_prod-CaP_breakdown);
    ode(CaP_SR, time) = 1{dimensionless}*(CaP_prod-CaP_breakdown);
    CaP_prod = sel
      case P_SR*Ca_SR-CaP_sol_krit > 0{dimensionless}:
        A_p*(P_SR*Ca_SR-CaP_sol_krit)*P_SR*Ca_SR;
      otherwise:
        0{dimensionless};
    endsel;
    CaP_breakdown = sel
      case CaP_sol_krit-P_SR*Ca_SR > 0{dimensionless}:
        B_p*CaP_SR*(CaP_sol_krit-P_SR*Ca_SR);
      otherwise:
        0{dimensionless};
    endsel;
    // ////////////////// Balance Equations //////////////////////////////////////////////////////
    Mg_MP = Mg_tot-MgTrop-MgATP-MgParv;
    Ca_SR = Ca_tot-Ca_MP-CaCSQ-CaTrop-CaATP-CaParv-CaDye-CaP_SR;
  enddef;

  def comp Razumova as
    var time: millisecond {pub: in};
    var CaTrop: micromolar {init: 0.7309, pub: in};
    var k_CO1: per_millisecond;
    var k_CO2: per_millisecond;
    var kFm1s: dimensionless {init: 0.0045};
    var kFm2s: dimensionless {init: 1.0};
    var KF501: micromolar {init: 6.1480};
    var KF502: micromolar {init: 6.3844};
    var NF: dimensionless {init: 2.5478};
    var NF2: dimensionless {init: 1.6971};
    var XBn: dimensionless {init: 0.9739};
    var XBw: dimensionless {init: 0.0207};
    var XBs: dimensionless {init: 0.0036};
    var XBr: dimensionless {init: 0.0018};
    var k_1: per_millisecond {init: 0.001};
    var k_1_prime: per_millisecond {init: 0.045};
    var k_2: per_millisecond {init: 0.13};
    var g_1: per_millisecond {init: 0.0169};
    var g_2: per_millisecond {init: 0.0337};
    var J_Pi_XB: micromolar_per_millisecond {pub: out};
    k_CO1 = kFm1s*pow(CaTrop/KF501, NF);
    k_CO2 = kFm2s*pow(CaTrop/KF502, NF2);
    ode(XBn, time) = -(k_CO1+k_1)*XBn+k_1_prime*XBw+g_2*XBr;
    ode(XBw, time) = (k_CO1+k_1)*XBn+k_2*XBs-(k_1_prime+k_CO2)*XBw;
    ode(XBs, time) = k_CO2*XBw-(k_2+g_1)*XBs;
    ode(XBr, time) = -g_2*XBr+g_1*XBs;
    J_Pi_XB = g_1*XBs;
  enddef;
  // def group as containment for
  //     comp cell incl
  //         comp wal_environment;
  //         comp sternrios;
  //         comp razumova;
  //     endcomp;
  // enddef;

  def group as encapsulation for
    comp wal_environment incl
      comp sarco_Cl_channel;
      comp sarco_IR_channel;
      comp sarco_DR_channel;
      comp sarco_Na_channel;
      comp sarco_NaK_channel;
      comp t_Cl_channel;
      comp t_IR_channel;
      comp t_DR_channel;
      comp t_Na_channel;
      comp t_NaK_channel;
    endcomp;
  enddef;
  def map between cell and wal_environment for
    vars time and time;
  enddef;
  def map between wal_environment and sarco_Cl_channel for
    vars vS and vS;
    vars Cl_i and Cl_i;
    vars Cl_o and Cl_o;
    vars V_a and V_a;
    vars A_a and A_a;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Cl_bar and g_Cl_bar;
    vars I_Cl and I_Cl;
  enddef;
  def map between wal_environment and sarco_IR_channel for
    vars vS and vS;
    vars E_K and E_K;
    vars K_e and K_e;
    vars J_K and J_K;
    vars del and del;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars G_K and G_K;
    vars K_K and K_K;
    vars K_S and K_S;
    vars S_i and S_i;
    vars I_IR and I_IR;
  enddef;
  def map between wal_environment and sarco_DR_channel for
    vars vS and vS;
    vars J_K and J_K;
    vars alpha_n_bar and alpha_n_bar;
    vars V_n and V_n;
    vars K_alpha_n and K_alpha_n;
    vars beta_n_bar and beta_n_bar;
    vars K_beta_n and K_beta_n;
    vars V_h_K_inf and V_h_K_inf;
    vars A_h_K_inf and A_h_K_inf;
    vars time and time;
    vars g_K_bar and g_K_bar;
    vars I_DR and I_DR;
  enddef;
  def map between wal_environment and sarco_Na_channel for
    vars vS and vS;
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars alpha_h_bar and alpha_h_bar;
    vars V_h and V_h;
    vars K_alpha_h and K_alpha_h;
    vars beta_h_bar and beta_h_bar;
    vars K_beta_h and K_beta_h;
    vars alpha_m_bar and alpha_m_bar;
    vars V_m and V_m;
    vars K_alpha_m and K_alpha_m;
    vars beta_m_bar and beta_m_bar;
    vars K_beta_m and K_beta_m;
    vars V_S_inf and V_S_inf;
    vars A_S_inf and A_S_inf;
    vars V_tau and V_tau;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Na_bar and g_Na_bar;
    vars I_Na and I_Na;
  enddef;
  def map between wal_environment and sarco_NaK_channel for
    vars vS and vS;
    vars Na_i and Na_i;
    vars Na_e and Na_e;
    vars K_e and K_e;
    vars K_m_K and K_m_K;
    vars K_m_Na and K_m_Na;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars J_NaK_bar and J_NaK_bar;
    vars I_NaK and I_NaK;
  enddef;
  def map between wal_environment and t_Cl_channel for
    vars vT and vT;
    vars Cl_i_t and Cl_i_t;
    vars Cl_o_t and Cl_o_t;
    vars V_a and V_a;
    vars A_a and A_a;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Cl_bar and g_Cl_bar;
    vars I_Cl_t and I_Cl_t;
    vars eta_Cl and eta_Cl;
  enddef;
  def map between wal_environment and t_IR_channel for
    vars vT and vT;
    vars E_K_t and E_K_t;
    vars K_t and K_t;
    vars J_K_t and J_K_t;
    vars del and del;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars G_K and G_K;
    vars K_K and K_K;
    vars K_S and K_S;
    vars S_i and S_i;
    vars I_IR_t and I_IR_t;
    vars eta_IR and eta_IR;
  enddef;
  def map between wal_environment and t_DR_channel for
    vars vT and vT;
    vars J_K_t and J_K_t;
    vars alpha_n_bar and alpha_n_bar;
    vars V_n and V_n;
    vars K_alpha_n and K_alpha_n;
    vars beta_n_bar and beta_n_bar;
    vars K_beta_n and K_beta_n;
    vars V_h_K_inf and V_h_K_inf;
    vars A_h_K_inf and A_h_K_inf;
    vars time and time;
    vars g_K_bar and g_K_bar;
    vars I_DR_t and I_DR_t;
    vars eta_DR and eta_DR;
  enddef;
  def map between wal_environment and t_Na_channel for
    vars vT and vT;
    vars Na_i and Na_i;
    vars Na_t and Na_t;
    vars alpha_h_bar and alpha_h_bar;
    vars V_h and V_h;
    vars K_alpha_h and K_alpha_h;
    vars beta_h_bar and beta_h_bar;
    vars K_beta_h and K_beta_h;
    vars alpha_m_bar and alpha_m_bar;
    vars V_m and V_m;
    vars K_alpha_m and K_alpha_m;
    vars beta_m_bar and beta_m_bar;
    vars K_beta_m and K_beta_m;
    vars V_S_inf and V_S_inf;
    vars A_S_inf and A_S_inf;
    vars V_tau and V_tau;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars g_Na_bar and g_Na_bar;
    vars I_Na_t and I_Na_t;
    vars eta_Na and eta_Na;
  enddef;
  def map between wal_environment and t_NaK_channel for
    vars vT and vT;
    vars Na_i and Na_i;
    vars Na_t and Na_t;
    vars K_t and K_t;
    vars K_m_K and K_m_K;
    vars K_m_Na and K_m_Na;
    vars FF and FF;
    vars RR and RR;
    vars TT and TT;
    vars time and time;
    vars J_NaK_bar and J_NaK_bar;
    vars I_NaK_t and I_NaK_t;
    vars eta_NaK and eta_NaK;
  enddef;
  def map between wal_environment and calcium_dynamics for
    vars vT and vT;
  enddef;
  def map between Razumova and cell for
    vars time and time;
  enddef;
  def map between Razumova and calcium_dynamics for
    vars CaTrop and CaTrop;
    vars J_Pi_XB and J_Pi_XB;
  enddef;
enddef;
